---
API: 2.1
OpenSesame: 3.3.0a69
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Kaart-sorteer taak online"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 24
set font_italic no
set font_family "Century Gothic"
set font_bold no
set experiment_path "C:/Users/sasz/Dropbox/FlexLang"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background grey

define loop block_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 48
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 color Blue
	setcycle 0 shape Cross
	setcycle 0 number 1
	setcycle 1 color Blue
	setcycle 1 shape Cross
	setcycle 1 number 2
	setcycle 2 color Blue
	setcycle 2 shape Star
	setcycle 2 number 1
	setcycle 3 color Blue
	setcycle 3 shape Star
	setcycle 3 number 3
	setcycle 4 color Blue
	setcycle 4 shape Triangle
	setcycle 4 number 2
	setcycle 5 color Blue
	setcycle 5 shape Triangle
	setcycle 5 number 2
	setcycle 6 color Blue
	setcycle 6 shape Cross
	setcycle 6 number 1
	setcycle 7 color Blue
	setcycle 7 shape Cross
	setcycle 7 number 2
	setcycle 8 color Blue
	setcycle 8 shape Star
	setcycle 8 number 1
	setcycle 9 color Blue
	setcycle 9 shape Star
	setcycle 9 number 3
	setcycle 10 color Blue
	setcycle 10 shape Triangle
	setcycle 10 number 2
	setcycle 11 color Blue
	setcycle 11 shape Triangle
	setcycle 11 number 2
	setcycle 12 color Red
	setcycle 12 shape Cross
	setcycle 12 number 2
	setcycle 13 color Red
	setcycle 13 shape Cross
	setcycle 13 number 4
	setcycle 14 color Red
	setcycle 14 shape Circle
	setcycle 14 number 2
	setcycle 15 color Red
	setcycle 15 shape Circle
	setcycle 15 number 3
	setcycle 16 color Red
	setcycle 16 shape Star
	setcycle 16 number 3
	setcycle 17 color Red
	setcycle 17 shape Star
	setcycle 17 number 4
	setcycle 18 color Red
	setcycle 18 shape Cross
	setcycle 18 number 2
	setcycle 19 color Red
	setcycle 19 shape Cross
	setcycle 19 number 4
	setcycle 20 color Red
	setcycle 20 shape Circle
	setcycle 20 number 2
	setcycle 21 color Red
	setcycle 21 shape Circle
	setcycle 21 number 3
	setcycle 22 color Red
	setcycle 22 shape Star
	setcycle 22 number 3
	setcycle 23 color Red
	setcycle 23 shape Star
	setcycle 23 number 4
	setcycle 24 color Green
	setcycle 24 shape Triangle
	setcycle 24 number 4
	setcycle 25 color Green
	setcycle 25 shape Triangle
	setcycle 25 number 3
	setcycle 26 color Green
	setcycle 26 shape Circle
	setcycle 26 number 3
	setcycle 27 color Green
	setcycle 27 shape Circle
	setcycle 27 number 1
	setcycle 28 color Green
	setcycle 28 shape Cross
	setcycle 28 number 1
	setcycle 29 color Green
	setcycle 29 shape Cross
	setcycle 29 number 4
	setcycle 30 color Green
	setcycle 30 shape Triangle
	setcycle 30 number 4
	setcycle 31 color Green
	setcycle 31 shape Triangle
	setcycle 31 number 3
	setcycle 32 color Green
	setcycle 32 shape Circle
	setcycle 32 number 3
	setcycle 33 color Green
	setcycle 33 shape Circle
	setcycle 33 number 1
	setcycle 34 color Green
	setcycle 34 shape Cross
	setcycle 34 number 1
	setcycle 35 color Green
	setcycle 35 shape Cross
	setcycle 35 number 4
	setcycle 36 color Yellow
	setcycle 36 shape Star
	setcycle 36 number 4
	setcycle 37 color Yellow
	setcycle 37 shape Star
	setcycle 37 number 1
	setcycle 38 color Yellow
	setcycle 38 shape Circle
	setcycle 38 number 1
	setcycle 39 color Yellow
	setcycle 39 shape Circle
	setcycle 39 number 2
	setcycle 40 color Yellow
	setcycle 40 shape Triangle
	setcycle 40 number 4
	setcycle 41 color Yellow
	setcycle 41 shape Triangle
	setcycle 41 number 2
	setcycle 42 color Yellow
	setcycle 42 shape Star
	setcycle 42 number 4
	setcycle 43 color Yellow
	setcycle 43 shape Star
	setcycle 43 number 1
	setcycle 44 color Yellow
	setcycle 44 shape Circle
	setcycle 44 number 1
	setcycle 45 color Yellow
	setcycle 45 shape Circle
	setcycle 45 number 2
	setcycle 46 color Yellow
	setcycle 46 shape Triangle
	setcycle 46 number 4
	setcycle 47 color Yellow
	setcycle 47 shape Triangle
	setcycle 47 number 2
	run trial_sequence

define sketchpad card_display
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw image center=1 file="Blue_Circle_4.png" scale=0.3 show_if=always x=-384 y=-160 z_index=0
	draw image center=1 file="Green_Star_2.png" scale=0.3 show_if=always x=-128 y=-160 z_index=0
	draw image center=1 file="Red_Triangle_1.png" scale=0.3 show_if=always x=128 y=-160 z_index=0
	draw image center=1 file="Yellow_Cross_3.png" scale=0.3 show_if=always x=384 y=-160 z_index=0
	draw image center=1 file="[color]_[shape]_[number].png" scale=0.3 show_if=always x=0 y=192 z_index=0
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=24 html=yes show_if=always text="Sorteer de kaart hieronder." x=0 y=64 z_index=0
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=24 html=yes show_if=always text=F x=-384 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=24 html=yes show_if=always text=G x=-128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=24 html=yes show_if=always text=H x=128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=24 html=yes show_if=always text=J x=384 y=0 z_index=0

define sketchpad correct_feedback
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family="Century Gothic" font_italic=no font_size=40 html=yes show_if=always text=Goed x=0 y=0 z_index=0
	draw circle color="#00aa00" fill=0 penwidth=10 r=90 show_if=always x=0 y=0 z_index=0

define inline_javascript determine_correct
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.first_response === 1){
	    if (vars.sequence_correct === 0){
	        if (vars.response === 'f'){
	            if (vars.shape === 'Circle' | vars.color === 'Blue' | vars.number === 4){
	                vars.correct = 1
	            } else {
	                vars.correct = 0
	            }
	        } else if (vars.response === 'g'){
	            if (vars.shape === 'Star' | vars.color === 'Green' | vars.number === 2){
	                vars.correct = 1
	            } else {
	                vars.correct = 0
	            }
	        } else if (vars.response === 'h'){
	            if (vars.shape === 'Triangle' | vars.color === 'Red' | vars.number === 1){
	                vars.correct = 1
	            } else {
	                vars.correct = 0
	            }
	        } else if (vars.response === 'j'){
	            if (vars.shape === 'Cross' | vars.color === 'Yellow' | vars.number === 3){
	                vars.correct = 1
	            } else {
	                vars.correct = 0
	            }
	        }
	        
	    } else if (vars.sequence_correct === 1){
	        if (vars.response === 'f'){
	            if (vars.shape === 'Circle'){
	                if (vars.matching_rule1 === 'shape'){
	                    vars.correct = 0
	                } else {
	                    vars.correct = 1
	                }
	            } else if (vars.color = 'Blue'){
	                if (vars.matching_rule1 === 'color'){
	                    vars.correct = 0
	                } else {
	                    vars.correct = 1
	                }
	            } else if (vars.number === 4){
	                if (vars.matching_rule1 === 'number'){
	                    vars.correct = 0
	                } else {
	                    vars.correct = 1
	                }
	            } else {
	                vars.correct = 0
	            }
	        } else if (vars.response === 'g'){
	            if (vars.shape === 'Star'){
	                if (vars.matching_rule1 === 'shape'){
	                    vars.correct = 0
	                } else {
	                    vars.correct = 1
	                }
	            } else if (vars.color === 'Green'){
	                if (vars.matching_rule1 === 'color'){
	                    vars.correct = 0
	                } else {
	                    vars.correct = 0
	                }
	            } else if (vars.number === 2){
	                if (vars.matching_rule1 === 'number'){
	                    vars.correct = 0
	                } else {
	                    vars.correct = 1
	                }
	            } else {
	                vars.correct = 0
	            }
	        } else if (vars.response === 'h'){
	            if (vars.shape === 'Triangle'){
	                if (vars.matching_rule1 === 'shape'){
	                    vars.correct = 0
	                } else {
	                    vars.correct = 1
	                }
	            } else if (vars.color === 'Red'){
	                if (vars.matching_rule1 === 'color'){
	                    vars.correct = 0
	                } else {
	                    vars.correct = 1
	                }
	            } else if (vars.number === 1){
	                if (vars.matching_rule1 === 'number'){
	                    vars.correct = 0
	                } else {
	                    vars.correct = 1
	                }
	            } else {
	                vars.correct = 0
	            }
	        } else if (vars.response === 'j'){
	            if (vars.shape === 'Cross'){
	                if (vars.matching_rule1 === 'shape'){
	                    vars.correct = 0
	                } else {
	                    vars.correct = 1
	                }
	            } else if (vars.color === 'Yellow'){
	                if (vars.matching_rule1 === 'color'){
	                    vars.correct = 0
	                } else {
	                    vars.correct = 1
	                }
	            } else if (vars.number === 3){
	                if (vars.matching_rule1 === 'number'){
	                    vars.correct = 0
	                } else {
	                    vars.correct = 1
	                }
	            } else vars.correct = 0
	        }
	    }
	    
	} else if (vars.first_response === 0){
	    if (vars.response === vars.correct_response){
	        vars.correct = 1
	    } else {
	        vars.correct = 0
	    }
	}
	
	console.log('correct = ' + vars.correct)
	__end__
	set _prepare ""

define inline_javascript determine_participant_matching_rule
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.first_response === 1){
	    if (vars.sequence_correct === 0){
	        if (vars.response === 'f'){
	            if (vars.color === 'Blue'){
	                vars.matching_rule = 'color'
	            } else if (vars.shape === 'Circle'){
	                vars.matching_rule = 'shape'
	            } else if (vars.number === 4){
	                vars.matching_rule = 'number'
	            } else {
	                vars.matching_rule = ''
	            }
	        } else if (vars.response === 'g'){
	            if (vars.color === 'Green'){
	                vars.matching_rule = 'color'
	            } else if (vars.shape === 'Star'){
	                vars.matching_rule = 'shape'
	            } else if (vars.number === 2){
	                vars.matching_rule = 'number'
	            } else {
	                vars.matching_rule = ''
	            }
	        } else if (vars.response === 'h'){
	            if (vars.color === 'Red'){
	                vars.matching_rule = 'color'
	            } else if (vars.shape === 'Triangle'){
	                vars.matching_rule = 'shape'
	            } else if (vars.number === 1){
	                vars.matching_rule = 'number'
	            } else {
	                vars.matching_rule = ''
	            }
	        } else if (vars.response === 'j'){
	            if (vars.color === 'Yellow'){
	                vars.matching_rule = 'color'
	            } else if (vars.shape === 'Cross'){
	                vars.matching_rule = 'shape'
	            } else if (vars.number === 3){
	                vars.matching_rule = 'number'
	            } else {
	                vars.matching_rule = ''
	            }
	        } else {
	            matching_rule = '' 
	        }
	        
	    } else if (vars.sequence_correct === 1){
	        if (vars.response === 'f'){
	            if (vars.color === 'Blue'){
	                if (vars.matching_rule1 === 'color'){
	                    vars.matching_rule = '' 
	                } else {
	                    vars.matching_rule = 'color'
	                }
	            } else if (vars.shape === 'Circle'){
	                if (vars.matching_rule1 === 'shape'){
	                    vars.matching_rule = ''
	                } else {
	                    vars.matching_rule = 'shape'
	                }
	            } else if (vars.number === 4){
	                if (vars.matching_rule1 === 'number'){
	                    vars.matching_rule = '' 
	                } else {
	                    vars.matching_rule = 'number'
	                }
	            } else {
	                vars.matching_rule = ''
	            }
	            
	        } else if (vars.response === 'g'){
	            if (vars.color === 'Green'){
	                if (vars.matching_rule1 === 'color'){
	                    vars.matching_rule = '' 
	                } else {
	                    vars.matching_rule = 'color'
	                }
	            } else if (vars.shape === 'Star'){
	                if (vars.matching_rule1 === 'shape'){
	                    vars.matching_rule = ''
	                } else {
	                    vars.matching_rule = 'shape'
	                }
	            } else if (vars.number === 2){
	                if (vars.matching_rule1 === 'number'){
	                    vars.matching_rule = '' 
	                } else {
	                    vars.matching_rule = 'number'
	                }
	            } else {
	                vars.matching_rule = ''
	            }
	            
	        } else if (vars.response === 'h'){
	            if (vars.color === 'Red'){
	                if (vars.matching_rule1 === 'color'){
	                    vars.matching_rule = '' 
	                } else {
	                    vars.matching_rule = 'color'
	                }
	            } else if (vars.shape === 'Triangle'){
	                if (vars.matching_rule1 === 'shape'){
	                    vars.matching_rule = ''
	                } else {
	                    vars.matching_rule = 'shape'
	                }
	            } else if (vars.number === 1){
	                if (vars.matching_rule1 === 'number'){
	                    vars.matching_rule = '' 
	                } else {
	                    vars.matching_rule = 'number'
	                }
	            } else {
	                vars.matching_rule = ''
	            }
	            
	        } else if (vars.response === 'j'){
	            if (vars.color === 'Yellow'){
	                if (vars.matching_rule1 === 'color'){
	                    vars.matching_rule = '' 
	                } else {
	                    vars.matching_rule = 'color'
	                }
	            } else if (vars.shape === 'Cross'){
	                if (vars.matching_rule1 === 'shape'){
	                    vars.matching_rule = ''
	                } else {
	                    vars.matching_rule = 'shape'}
	            } else if (vars.number === 3){
	                if (vars.matching_rule1 === 'number'){
	                    vars.matching_rule = '' 
	                } else {
	                    vars.matching_rule = 'number'
	                }
	            } else {
	                vars.matching_rule = ''
	            }
	            
	        } else {
	            matching_rule = '' 
	        }
	    }
	}
	__end__
	set _prepare ""

define sketchpad example
	set start_response_interval no
	set reset_variables no
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=24 html=yes show_if=always text="Sorteer de kaart hieronder." x=0 y=64 z_index=0
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=32 html=yes show_if=always text=F x=-384 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=32 html=yes show_if=always text=G x=-128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=32 html=yes show_if=always text=H x=128 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=32 html=yes show_if=always text=J x=384 y=0 z_index=0
	draw image center=1 file="Blue_Circle_4.png" scale=0.3 show_if=always x=-384 y=-160 z_index=0
	draw image center=1 file="Green_Star_2.png" scale=0.3 show_if=always x=-128 y=-160 z_index=0
	draw image center=1 file="Red_Triangle_1.png" scale=0.3 show_if=always x=128 y=-160 z_index=0
	draw image center=1 file="Yellow_Cross_3.png" scale=0.3 show_if=always x=384 y=-160 z_index=0
	draw arrow arrow_body_length=0.8 arrow_body_width=0.5 arrow_head_width=30 color=white fill=1 penwidth=1 show_if=always x1=160 x2=288 y1=128 y2=-32 z_index=0
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=24 html=yes show_if=always text="Druk bijvoorbeeld <br />op 'J'om de kaart <br />te sorteren op de <br />meest rechter <br />voorbeeld kaart" x=352 y=160 z_index=0
	draw image center=1 file="Yellow_Star_4.png" scale=0.3 show_if=always x=0 y=192 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run instructions1 always
	run example always
	run press_j always
	run instructions2 always
	run init always
	run block_loop always
	run goodbye always

define sketchpad goodbye
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=32 html=yes show_if=always text="Klaar!<br /><br /><br />Bedankt voor uw deelname!<br /><br /><br />Druk op een toets om het experiment af te sluiten." x=0 y=-32 z_index=0

define sketchpad incorrect_feedback
	set duration 500
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family="Century Gothic" font_italic=no font_size=40 html=yes show_if=always text=Fout x=0 y=0 z_index=0
	draw circle color="#ef0004" fill=0 penwidth=10 r=90 show_if=always x=0 y=0 z_index=0

define inline_javascript init
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	vars.matching_rule = 'empty'
	vars.correct_in_a_row = 0
	vars.sequence_correct = 0
	vars.first_response = 1
	vars.matching_rule1 = ''
	vars.matching_rule2 = ''
	vars.matching_rule3 = ''
	vars.matching_rule4 = ''
	vars.matching_rule5 = ''
	vars.matching_rule6 = ''
	vars.prompt_rule_update = 0
	__end__
	set _prepare ""

define sketchpad instructions1
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=24 html=yes show_if=always text="U ziet straks vier kaarten bovenin het scherm <br />en één kaart onderin het scherm.<br /><br />Uw taak is om de onderste kaart te sorteren. <br />U doet dit door op één van de toetsen <br />F G H of J te drukken, die overeenkomen<br />met de vier kaarten bovenin het scherm.<br /><br />U moet zelf de regels voor het sorteren ontdekken <br />door verschillende manieren <br />van sorteren te proberen. <br /><br />Na elke poging ziet u of <br />de sortering goed of fout was.<br /><br /><br />Druk op ENTER om een voorbeeld te zien." x=0 y=0 z_index=0

define sketchpad instructions2
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=24 html=yes show_if=always text="Af en toe veranderen de regels.<br />Dat wordt dan aangegeven <br /><br />Het is aan u om dan de nieuwe regel<br />voor het sorteren te vinden. <br /><br />Druk op ENTER om te beginnen<br />" x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define keyboard_response press_fghj
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses "f;g;h;j"

define keyboard_response press_j
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set allowed_responses j

define sketchpad rule_update
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family="Century Gothic" font_italic=no font_size=24 html=yes show_if=always text="De sorteerregel is nu veranderd.<br />Nu moet je een andere sorteerregel vinden.<br /><br />Druk op een toets om door te gaan." x=0 y=0 z_index=0

define inline_javascript set_correct_response
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.first_response === 0){
	    if (vars.matching_rule === 'shape') {
	        if (vars.shape === 'Circle') vars.correct_response = 'f'
	        else if (vars.shape === 'Star') vars.correct_response = 'g'
	        else if (vars.shape === 'Triangle') vars.correct_response = 'h'
	        else if (vars.shape === 'Cross') vars.correct_response = 'j'
	    } else if (vars.matching_rule === 'color') {
	        if (vars.color === 'Blue') vars.correct_response = 'f'
	        else if (vars.color ==='Green') vars.correct_response = 'g'
	        else if (vars.color === 'Red') vars.correct_response = 'h'
	        else if (vars.color === 'Yellow') vars.correct_response = 'j'
	    } else if (vars.matching_rule === 'number') {
	        if (vars.number === 4) vars.correct_response = 'f'
	        else if (vars.number === 2) vars.correct_response = 'g'
	        else if (vars.number === 1) vars.correct_response = 'h'
	        else if (vars.number === 3) vars.correct_response = 'j'
	    }
	} else if (vars.first_response === 1){
	    vars.correct_response = '' 
	}
	console.log('matching_rule = ' + vars.matching_rule)
	console.log('correct_response = ' + vars.correct_response)
	__end__
	set _prepare ""

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run set_correct_response always
	run card_display always
	run press_fghj always
	run determine_correct always
	run incorrect_feedback "[correct] = 0"
	run correct_feedback "[correct] = 1"
	run determine_participant_matching_rule always
	run update_matching_rule always
	run rule_update "[prompt_rule_update] = 1"
	run logger always

define inline_javascript update_matching_rule
	set description "Executes JavaScript code (ECMA 5.1)"
	___run__
	if (vars.first_response === 1){
	    if (vars.correct === 1){
	        vars.first_response = 0
	    } else {
	        vars.first_response = 1
	    }
	}
	
	if (vars.correct === 1) {
	    vars.correct_in_a_row = vars.correct_in_a_row + 1
	    vars.prompt_rule_update=0
	} else {
	    vars.correct_in_a_row  = 0
	    vars.prompt_rule_update = 0
	}
	
	if (vars.correct_in_a_row === 6) {
	    vars.sequence_correct = vars.sequence_correct + 1
	    vars.prompt_rule_update = 1
	    vars.correct_in_a_row = 0
	    
	    if (vars.sequence_correct === 1) {
		if (vars.matching_rule === 'shape') {
	            vars.matching_rule1 = 'shape'
	            vars.matching_rule = 'empty'
	        } else if (vars.matching_rule === 'number') {
	            vars.matching_rule1 = 'number'
	            vars.matching_rule = 'empty'
	        } else if (vars.matching_rule === 'color') {
	            vars.matching_rule1 = 'color'
	            vars.matching_rule = 'empty'
	        }
	        vars.first_response = 1
	
	    } else if (vars.sequence_correct === 2) {
	        if (vars.matching_rule === 'shape') {
	            vars.matching_rule2 = 'shape'
	            if (vars.matching_rule1 === 'number') {
	                vars.matching_rule = 'color'
	                vars.matching_rule3 = vars.matching_rule
	            } else if (vars.matching_rule1 === 'color') {
	                vars.matching_rule = 'number'
	                vars.matching_rule3 = vars.matching_rule
	            }
	        } else if (vars.matching_rule === 'number') {
	            vars.matching_rule2 = 'number'
	            if (vars.matching_rule1 === 'shape') {
	                vars.matching_rule = 'color'
	                vars.matching_rule3 = vars.matching_rule
	            } else if (vars.matching_rule1 === 'color'){
	                vars.matching_rule = 'shape'
	                vars.matching_rule3 = vars.matching_rule
	            }
	        } else if (vars.matching_rule === 'color') {
	            vars.matching_rule2 = 'color'
	            if (vars.matching_rule1 === 'shape') {
	                vars.matching_rule = 'number'
	                vars.matching_rule3 = vars.matching_rule
	            } else if (vars.matching_rule1 === 'number') {
	                vars.matching_rule = 'shape'
	                vars.matching_rule3 = vars.matching_rule
	            }
	        }
	        
	    } else if (vars.sequence_correct === 3){
	        vars.matching_rule = vars.matching_rule1
	        vars.matching_rule4 = vars.matching_rule1
	
	
	    } else if (vars.sequence_correct === 4){
	        vars.matching_rule = vars.matching_rule2
	        vars.matching_rule5 = vars.matching_rule2
	        
	    } else if (vars.sequence_correct === 5){
	        vars.matching_rule = vars.matching_rule3
	        vars.matching_rule6 = vars.matching_rule3
	        
	    } else if (vars.sequence_correct === 6){
	        vars.matching_rule = 'empty'
	        vars.sequence_correct = 0
	        vars.first_response = 1
	    
	    }
	}
		
			
	console.log('correct_in_a_row = ' + vars.correct_in_a_row)
	console.log('sequence_correct = ' + vars.sequence_correct)
	__end__
	set _prepare ""

